PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  expName = MASC
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine PlayVideo
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    MovieComponent Clip
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $ClipName
      size = (0.64, 0.48)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent CollectDataVideo
      Code Type = Auto->JS
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      Begin Routine:
        # Record the start time of the clip
        t0 = globalClock.getTime()
        thisExp.addData('t0', t0)

        # Log the clip name
        thisExp.addData('ClipName', ClipName)  # Replace `currentClip` with the variable storing the clip name
      End Routine:
        # Record the end time of the clip
        t1 = globalClock.getTime()
        thisExp.addData('t1', t1)
  Routine AskQuestion
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    TextComponent Questions
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
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    TextComponent Answer_A
      letterHeight = 0.04
      pos = (-0.5, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Answer_1
      wrapWidth = 0.3
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    TextComponent Answer_B
      letterHeight = 0.04
      pos = (-0.16, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Answer_2
      wrapWidth = 0.3
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    TextComponent Answer_C
      letterHeight = 0.04
      pos = (0.16, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Answer_3
      wrapWidth = 0.3
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    TextComponent Answer_D
      letterHeight = 0.04
      pos = (0.5, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Answer_4
      wrapWidth = 0.2
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    SliderComponent slider_2
      borderColor = Gray
      forceEndRoutine = True
      granularity = 1
      initVal = 1
      letterHeight = 0.01
      pos = (0, 0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4)
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    CodeComponent SliderStuff
      Code Type = Auto->JS
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      Begin Routine:
        # Dynamically fetch the labels from the conditions file
        #slider_labels = [Answer_1, Answer_2, Answer_3, Answer_4]

        # Assign labels to the slider
        #slider_2.reset()
        #slider_2.labels = slider_labels

        # Flip the triangle horizontally
        #slider_2.marker.setOri(180)  # Flip the triangle

        # Clear any lingering keypresses from the previous routine
        event.clearEvents()
      Each Frame:
        #EachFrame
        # Detect arrow keys and move the slider marker
        keys = event.getKeys(['left', 'right', 'return'])

        if 'left' in keys and slider_2.markerPos > slider_2.ticks[0]:
            slider_2.markerPos -= 1  # Move left
        elif 'right' in keys and slider_2.markerPos < slider_2.ticks[-1]:
            slider_2.markerPos += 1  # Move right
        elif 'return' in keys:
            # Confirm the selection and end the routine
            continueRoutine = False
      End Routine:
        # Get the slider's selected position
        slider_position = slider_2.markerPos

        # Map the slider position to the corresponding answer
        if slider_position == 1:
            chosen_answer = Answer_1
        elif slider_position == 2:
            chosen_answer = Answer_2
        elif slider_position == 3:
            chosen_answer = Answer_3
        elif slider_position == 4:
            chosen_answer = Answer_4
        else:
            chosen_answer = "No selection"

        # Print the result to the console for debugging
        print(f"Slider Position: {slider_position}, Chosen Answer: {chosen_answer}")

        # Log the chosen answer in the data file
        thisExp.addData('ChosenAnswer', chosen_answer)

        # Log correctness
        if chosen_answer == Target:  # Replace `Target` with the correct answer column from your conditions file
            thisExp.addData('Correct', 1)
            thisExp.addData('Score', 1)
        else:
            thisExp.addData('Correct', 0)
            thisExp.addData('Score', -1)
    TextComponent InstructionSlider
      letterHeight = 0.025
      pos = (0, -0.40)
      startVal [time (s)] = 0.0
      text = Utilisez les touches fléchées pour naviguer et appuyez sur la touche Entrée pour valider votre sélection.
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    CodeComponent QuestionDataCollectTime
      Code Type = Auto->JS
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      Begin Routine:
        # Record the time when the question is displayed
        t2 = globalClock.getTime()
        thisExp.addData('t2', t2)
      End Routine:
        # Ensure slider has a valid response

        if slider_2.getRating() is None:
            thisExp.addData('slider_2.response', 'No Response')
            thisExp.addData('slider_2.rt', 'No Response')
        else:
            thisExp.addData('slider_2.response', slider_2.getRating())
            thisExp.addData('slider_2.rt', slider_2.getRT())
    CodeComponent QuestionMetadataPy
      Code Type = Py
      disabled = True
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      End Routine:
        try:
            # Ensure markerPos is not None and convert to integer (1-based index)
            if slider_2.markerPos is not None:
                slider_position = int(slider_2.markerPos)

                # Validate slider_position is within the expected range (1-4)
                if 1 <= slider_position <= 4:
                    # Dynamically fetch answer metadata based on slider position
                    selected_target = eval(f"Target_{slider_position}")  # Example: Target_1, Target_2
                    selected_category = eval(f"Category_{slider_position}")  # Example: Category_1, Category_2
                    selected_score = eval(f"Score_{slider_position}")  # Example: Score_1, Score_2

                    # Determine if the answer is correct
                    response_correct = 1 if selected_target == Target else 0

                    # Add metadata to the output file
                    thisExp.addData('SliderPosition', slider_position)
                    thisExp.addData('ChosenAnswer', eval(f"Answer_{slider_position}"))
                    thisExp.addData('Correct', response_correct)
                    thisExp.addData('Score', selected_score)
                    thisExp.addData('Category', selected_category)
                    thisExp.addData('Target', Target)
                else:
                    raise ValueError("Slider position is out of range (1-4).")
            else:
                raise ValueError("No slider response recorded.")

        except Exception as e:
            print(f"Error in metadata collection: {e}")
            # Log error information to the output file
            thisExp.addData('SliderPosition', "Error")
            thisExp.addData('ChosenAnswer', "Error")
            thisExp.addData('Correct', "Error")
            thisExp.addData('Score', "Error")
            thisExp.addData('Category', "Error")
            thisExp.addData('Target', "Error")
    CodeComponent QuestionMetadataJs
      Code Type = JS
      disabled = True
      End JS Routine:
        try {
            // Ensure slider_2 has a valid response
            if (slider_2.getRating() !== null) {
                let sliderPosition = Math.round(slider_2.getRating());

                // Validate sliderPosition is within the expected range
                if (sliderPosition >= 1 && sliderPosition <= 4) {
                    // Directly fetch metadata for the selected position
                    let trial = psychoJS.experiment._trialsData[psychoJS.experiment._currentTrialIndex]; // Get the current trial object
                    let selectedTarget = trial[`Target_${sliderPosition}`];
                    let selectedCategory = trial[`Category_${sliderPosition}`];
                    let selectedScore = trial[`Score_${sliderPosition}`];
                    let chosenAnswer = trial[`Answer_${sliderPosition}`];

                    // Check if the response is correct
                    let responseCorrect = (selectedTarget === trial["Target"]) ? 1 : 0;

                    // Log data
                    psychoJS.experiment.addData('SliderPosition', sliderPosition);
                    psychoJS.experiment.addData('ChosenAnswer', chosenAnswer);
                    psychoJS.experiment.addData('Correct', responseCorrect);
                    psychoJS.experiment.addData('Score', selectedScore);
                    psychoJS.experiment.addData('Category', selectedCategory);
                    psychoJS.experiment.addData('Target', trial["Target"]);
                } else {
                    throw new Error("Slider position is out of range (1-4).");
                }
            } else {
                throw new Error("No slider response recorded.");
            }
        } catch (err) {
            console.error(`Error in metadata collection: ${err.message}`);
            // Log errors
            psychoJS.experiment.addData('SliderPosition', "Error");
            psychoJS.experiment.addData('ChosenAnswer', "Error");
            psychoJS.experiment.addData('Correct', "Error");
            psychoJS.experiment.addData('Score', "Error");
            psychoJS.experiment.addData('Category', "Error");
            psychoJS.experiment.addData('Target', "Error");
        }
  Routine ConfidenceSlider
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    CodeComponent Confidence_Slider_Controller
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize logging variables for confidence slider
        confidence_slider.reset()  # Reset slider state
        confidence_slider.markerPos = 5  # Neutral starting position (middle)
        t_confidence_start = globalClock.getTime()  # Log the time when slider is displayed
        print(f"Begin Routine: Confidence slider initialized with markerPos={confidence_slider.markerPos}")
      Each Frame:
        # Detect arrow keys and move the slider marker
        keys = event.getKeys(['left', 'right', 'return'])

        if 'left' in keys and confidence_slider.markerPos > confidence_slider.ticks[0]:
            confidence_slider.markerPos -= 1  # Move left
            print(f"Each Frame: Marker moved left to {confidence_slider.markerPos}")
        elif 'right' in keys and confidence_slider.markerPos < confidence_slider.ticks[-1]:
            confidence_slider.markerPos += 1  # Move right
            print(f"Each Frame: Marker moved right to {confidence_slider.markerPos}")
        elif 'return' in keys:
            # Confirm the selection and end the routine
            print(f"Each Frame: 'Return' pressed. Final position: {confidence_slider.markerPos}")
            continueRoutine = False  # End the routine
      End Routine:
        # Record the confidence slider's final position
        confidence_position = confidence_slider.markerPos

        # Add confidence data to the experiment output
        if confidence_position is not None:
            t_confidence_end = globalClock.getTime()  # Log end time
            confidence_rt = t_confidence_end - t_confidence_start  # Calculate response time
            print(f"End Routine: Confidence position={confidence_position}, RT={confidence_rt}")
            thisExp.addData('ConfidencePosition', confidence_position)
            thisExp.addData('ConfidenceRT', confidence_rt)
        else:
            print("No confidence rating recorded.")
            thisExp.addData('ConfidencePosition', "No selection")
            thisExp.addData('ConfidenceRT', "No response")
    SliderComponent confidence_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = "Pas confiant", "Ni confiant, ni pas confiant", "Très confiant"
      letterHeight = 0.019
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent text_4
      letterHeight = 0.025
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Utilisez les touches fléchées pour naviguer et appuyez sur la touche Entrée pour valider votre sélection.
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = A quel point êtes vous sur de votre réponse?
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    CodeComponent LogConfidenceData
      Code Type = Auto->JS
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      Begin Routine:
        t4 = globalClock.getTime()
        thisExp.addData('t4', t4)
      End Routine:
        '''
        # Ensure confidence slider has a valid response
        if confidence_slider.getRating() is None:
            print("No response recorded for confidence_slider")
            thisExp.addData('confidence_slider.response', 'No Response')
            thisExp.addData('confidence_slider.rt', 'No Response')
        else:
            # Get confidence slider response and reaction time
            confidence_position = confidence_slider.getRating()
            confidence_rt = confidence_slider.getRT()

            # Log confidence-related data
            thisExp.addData('confidence_slider.response', confidence_position)
            thisExp.addData('confidence_slider.rt', confidence_rt)

        # Debugging logs
        print(f"Confidence Slider response: {confidence_slider.getRating()}")
        print(f"Confidence Slider RT: {confidence_slider.getRT()}")
        '''
  Routine Instruction
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    TextComponent WelcomeParticipant
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vous allez visionner un film d‘une durée de 15 minutes. Regardez attentivement ce film et essayez de comprendre ce que chaque personnage pense ou ressent.

         Appuyez sur la touche espace pour continuer.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        $ClipName
  Routine Characters
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Nous vous proposons maintenant de rencontrer chacun des personnages.
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Appuyez sur la touche espace pour continuer.
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    ImageComponent Character
      image [set every repeat] = $FileName
      size = (0.629, 0.418)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Text
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Appuyez sur la touche espace pour continuer.
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  Routine ThankYou
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    TextComponent Thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Vous avez terminé l'experience. Merci de votre participation.
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  Routine Gender
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    CodeComponent Gender_slider_controller
      Code Type = Auto->JS
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      Each Frame:
        # Detect arrow keys and move the slider marker
        keys = event.getKeys(['left', 'right', 'return'])

        if 'left' in keys and Gender_slider.markerPos > Gender_slider.ticks[0]:
            Gender_slider.markerPos -= 1  # Move left
        elif 'right' in keys and Gender_slider.markerPos < Gender_slider.ticks[-1]:
            Gender_slider.markerPos += 1  # Move right
        elif 'return' in keys:
            # Confirm the selection and end the routine
            continueRoutine = False
      End Routine:
        # Get the slider's selected position
        Gender_slider_position = Gender_slider.markerPos

        # Log the slider position in the data file
        thisExp.addData('Gender_slider_position', Gender_slider_position)
    TextComponent GenderQuestion
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = À quel sexe vous identifiez-vous ?
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    SliderComponent Gender_slider
      borderColor = Gray
      color = White
      forceEndRoutine = False
      granularity = 1
      initVal = 1
      labels = "Femme","Homme","Autre", "Je préfère ne pas le dire"
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4)
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    TextComponent InstructionGenderSlider
      letterHeight = 0.025
      pos = (0, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Utilisez les touches fléchées pour naviguer et appuyez sur la touche Entrée pour valider votre sélection.
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    CodeComponent CollectGenderData
      Code Type = Auto->JS
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      End Routine:
        # Define the labels for the slider
        labels = ["Femme", "Homme", "Autre", "Je préfère ne pas le dire"]

        # Get the slider's final position
        slider_position = Gender_slider.markerPos

        # Map the slider position to the corresponding label
        if slider_position == 1:
            chosen_value = labels[0]
        elif slider_position == 2:
            chosen_value = labels[1]
        elif slider_position == 3:
            chosen_value = labels[2]
        elif slider_position == 4:
            chosen_value = labels[3]
        else:
            chosen_value = "No Selection"

        # Log the slider position and chosen label
        thisExp.addData('Gender_slider_position', slider_position)
        thisExp.addData('Gender_slider.response', chosen_value)
        thisExp.addData('Gender_slider.rt', Gender_slider.getRT())
  Routine PreLoadVideos
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = Chargement...
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    ResourceManagerComponent video_resources
      actionType = Start and Check
      checkAll = True
      forceEndRoutine = True
      resources = ['01.mp4', '02.mp4', '03.mp4', '04.mp4', '05.mp4', '06-07.mp4', '08.mp4', '09.mp4', '10.mp4', '11.mp4', '12.mp4', '13.mp4', '14.mp4', '15.mp4', '16.mp4', '17.mp4', '18.mp4', '19.mp4', '20.mp4', '21.mp4', '22-23.mp4', '24.mp4', '25.mp4', '26.mp4', '27.mp4', '28.mp4', '29.mp4', '30.mp4', '31.mp4', '32.mp4', '33.mp4', '34.mp4', '35.mp4', '36-37.mp4', '38.mp4', '39.mp4', '40.mp4', '41.mp4', '42.mp4', '43.mp4', '44.mp4', '45.mp4', '46.mp4', 'Anna.png', 'Ben.png', 'Marie.png', 'Michael.png']
      startVal [time (s)] = 0
  Routine Ethics
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    TextComponent text_10
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = La participation à cette étude est entièrement volontaire, et un consentement éclairé est obtenu avant le début de celle-ci. Les participants sont assurés de l'anonymat et de la confidentialité, toutes les données étant stockées de manière sécurisée et utilisées uniquement à des fins de recherche. L'étude présente un risque minimal pour les participants, qui peuvent se retirer à tout moment sans conséquence. L'approbation éthique de cette étude a été obtenue auprès de Centre Hospitalaire Universitaire Vaudoise.
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    SliderComponent EthicsSlider
      forceEndRoutine = True
      granularity = 1
      initVal = 1
      labels = "Oui", "Non"
      letterHeight = 0.05
      pos = (0, -0.08)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2)
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    CodeComponent EthicsSliderController
      Code Type = Both
      Begin JS Routine:
        slider_position = 0;
        EthicsSlider.markerPos = slider_position;
      Begin Routine:
        # Initialize variables
        slider_position = 0  # Starting position of the slider
        EthicsSlider.markerPos = slider_position  # Set initial slider position
      Each Frame:
        # Detect arrow keys and move the slider marker
        keys = event.getKeys(['left', 'right', 'return'])

        if 'left' in keys and EthicsSlider.markerPos > EthicsSlider.ticks[0]:
            EthicsSlider.markerPos -= 1  # Move left
        elif 'right' in keys and EthicsSlider.markerPos < EthicsSlider.ticks[-1]:
            EthicsSlider.markerPos += 1  # Move right
        elif 'return' in keys:
            # Confirm the selection and end the routine
            continueRoutine = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys(["left", "right", "return"]);
        if ((_pj.in_es6("left", keys) && (EthicsSlider.markerPos > EthicsSlider.ticks[0]))) {
            EthicsSlider.markerPos -= 1;
        } else {
            if ((_pj.in_es6("right", keys) && (EthicsSlider.markerPos < EthicsSlider.ticks.slice((- 1))[0]))) {
                EthicsSlider.markerPos += 1;
            } else {
                if (_pj.in_es6("return", keys)) {
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        // Define the labels for the Ethics slider
        const ethics_labels = ["Oui", "Non"];

        // Get the slider position (markerPos)
        let slider_position = EthicsSlider.markerPos;

        // Map position to label
        let chosen_value;
        if (slider_position >= 1 && slider_position <= ethics_labels.length) {
            chosen_value = ethics_labels[slider_position - 1];
        } else {
            chosen_value = "No Response";
        }

        // Log the data
        psychoJS.experiment.addData('EthicsSlider_position', slider_position);
        psychoJS.experiment.addData('EthicsSlider.response', chosen_value);
        psychoJS.experiment.addData('EthicsSlider.rt', EthicsSlider.rt);
      End Routine:
        # Define the labels for the Ethics slider
        ethics_labels = ["Oui", "Non"]

        # Get the slider's final position
        slider_position = EthicsSlider.markerPos

        # Map the slider position to the corresponding label
        if slider_position in range(1, len(ethics_labels) + 1):  # Ensure valid range
            chosen_value = ethics_labels[slider_position - 1]  # Map position to label
        else:
            chosen_value = "No Selection"

        # Log the slider position and chosen label
        thisExp.addData('EthicsSlider_position', slider_position)
        thisExp.addData('EthicsSlider.response', chosen_value)
        thisExp.addData('EthicsSlider.rt', EthicsSlider.getRT())
    TextComponent InstructionEthicsSlider
      letterHeight = 0.025
      pos = (0, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Utilisez les touches fléchées pour naviguer et appuyez sur la touche Entrée pour valider votre sélection.
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  Routine CountryOfResidence
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Quel est votre pays de résidence ?
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Enter text
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    CodeComponent Type_Controller
      Code Type = Both
      Begin JS Routine:
        text_entered = "";
        typing_enabled = false;
        instruction_text = "Appuyez sur 'T' pour commencer a taper et sur 'Entree ' pour soumettre.";
        textbox.setText(instruction_text);
      Begin Routine:
        #BeginRoutine

        text_entered = ''  # Stores the user input
        typing_enabled = False  # Whether typing is allowed
        instruction_text = "Appuyez sur 'T' pour commencer a taper et sur 'Entree ' pour soumettre."  # Instruction message
        textbox.setText(instruction_text)  # Set the initial instruction text
      Each Frame:
        #EachFrame

        # Get currently pressed keys
        keys = event.getKeys()

        # Debugging: Print the pressed keys
        if keys:
            print(f"Keys pressed: {keys}")

        # Check if typing is enabled
        if typing_enabled:
            for key in keys:
                if key == 'return':  # If Enter is pressed
                    print(f"Input submitted: '{text_entered}'")  # Debug: Log the submitted input
                    thisExp.addData('Country', text_entered)  # Save the entered text to the experiment data
                    continueRoutine = False  # End the routine
                    typing_enabled = False  # Disable typing
                elif key == 'backspace':  # If Backspace is pressed
                    if len(text_entered) > 0:  # Only delete if there is text
                        text_entered = text_entered[:-1]  # Remove the last character
                        print(f"Backspace pressed. Updated text: '{text_entered}'")  # Debug log
                elif key == 'period':  # Handle '.' character
                    text_entered += '.'  # Append a dot
                    print(f"Period pressed. Updated text: '{text_entered}'")  # Debug log
                elif len(key) == 1:  # If it's a single character (e.g., numbers or letters)
                    text_entered += key  # Add the key to the text
                    print(f"Key '{key}' added. Updated text: '{text_entered}'")  # Debug log

            # Update the textbox with the latest text
            textbox.setText(text_entered)

        elif 't' in keys:  # Enable typing when 'T' is pressed
            typing_enabled = True  # Enable typing
            text_entered = ''  # Clear previous input
            textbox.setText('')  # Clear the textbox
            print("Typing enabled. Textbox cleared.")  # Debug log
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (-1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        keys = psychoJS.eventManager.getKeys();
        if (keys) {
            console.log(`Keys pressed: ${keys}`);
        }

        if (typing_enabled) {
            for (var key, _pj_c = 0, _pj_a = keys, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                key = _pj_a[_pj_c];

                if (key === "return") {  // Submit input
                    console.log(`Input submitted: '${text_entered}'`);
                    psychoJS.experiment.addData("Country", text_entered);
                    continueRoutine = false;
                    typing_enabled = false;

                } else if (key === "backspace") {  // Handle backspace
                    if (text_entered.length > 0) {
                        text_entered = text_entered.slice(0, -1);
                        console.log(`Backspace pressed. Updated text: '${text_entered}'`);
                    }

                } else if (key === "period") {  // Handle period
                    text_entered += ".";
                    console.log(`Period pressed. Updated text: '${text_entered}'`);

                } else if (key === "space") {  // Handle space
                    text_entered += " ";
                    console.log(`Space pressed. Updated text: '${text_entered}'`);

                } else if (key.length === 1) {  // Handle single characters
                    text_entered += key;
                    console.log(`Key '${key}' added. Updated text: '${text_entered}'`);
                }
            }

            // Update the textbox
            textbox.setText(text_entered);

        } else if (_pj.in_es6("t", keys)) {  // Enable typing on 't' key
            typing_enabled = true;
            text_entered = "";
            textbox.setText("");
            console.log("Typing enabled. Textbox cleared.");
        }
      End JS Routine:
        // Save the entered text
        psychoJS.experiment.addData('Country', text_entered);
      End Routine:
        # EndRoutine

        # Save the entered text
        thisExp.addData('Country', text_entered)
    CodeComponent LogCountry
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        thisExp.addData('Country', textbox.text)
  Routine AgeRange
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    CodeComponent AgeRange_slider_controller
      Code Type = Auto->JS
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      Each Frame:
        # Detect arrow keys and move the slider marker
        keys = event.getKeys(['left', 'right', 'return'])

        if 'left' in keys and Age_slider.markerPos > Age_slider.ticks[0]:
            Age_slider.markerPos -= 1  # Move left
        elif 'right' in keys and Age_slider.markerPos < Age_slider.ticks[-1]:
            Age_slider.markerPos += 1  # Move right
        elif 'return' in keys:
            # Confirm the selection and end the routine
            continueRoutine = False
    TextComponent AgeQuestion
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = À quelle tranche d’âge vous identifiez-vous ?
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    SliderComponent Age_slider
      borderColor = Gray
      color = White
      forceEndRoutine = True
      granularity = 1
      initVal = 1
      labels = "18-29","30-39","40-49", "50-59", "60-69", "70-79", "80+"
      letterHeight = 0.03
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent InstructionAgeSlider
      letterHeight = 0.025
      pos = (0, -0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Utilisez les touches fléchées pour naviguer et appuyez sur la touche Entrée pour valider votre sélection.
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    CodeComponent CollectAgeData
      Code Type = Both
      End JS Routine:
        // Define the labels for the age ranges
        const age_labels = ["18-29", "30-39", "40-49", "50-59", "60-69", "70-79", "80+"];

        // Get the slider position (markerPos)
        let slider_position = Age_slider.markerPos;

        // Map position to label
        let chosen_value;
        if (slider_position >= 1 && slider_position <= age_labels.length) {
            chosen_value = age_labels[slider_position - 1];
        } else {
            chosen_value = "No Response";
        }

        // Log the data
        psychoJS.experiment.addData('Age_slider_position', slider_position);
        psychoJS.experiment.addData('Age_slider.response', chosen_value);
        psychoJS.experiment.addData('Age_slider.rt', Age_slider.rt);
      End Routine:
        # Define the labels for the age ranges
        age_labels = ["18-29", "30-39", "40-49", "50-59", "60-69", "70-79", "80+"]

        # Get the slider's final position
        slider_position = Age_slider.markerPos

        # Map the slider position to the corresponding age range label
        if slider_position in range(1, len(age_labels) + 1):  # Ensure valid range
            chosen_value = age_labels[slider_position - 1]  # Map position to label
        else:
            chosen_value = "No Selection"

        # Log the slider position and chosen label
        thisExp.addData('Age_slider_position', slider_position)
        thisExp.addData('Age_slider.response', chosen_value)
        thisExp.addData('Age_slider.rt', Age_slider.getRT())
  Routine test_backspace
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        #EachFrame

        # Get currently pressed keys
        keys = event.getKeys()

        # Debugging: Print the pressed keys
        if keys:
            print(f"Keys pressed: {keys}")
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Any text

        including line breaks
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine Ethics
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine AgeRange
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Gender
  LoopTerminator trials_3
  Routine CountryOfResidence
  Routine Instruction
  LoopInitiator CharactersLoop loopType="TrialHandler"
    conditionsFile = MASC_Characters.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Name': 'Anna', 'FileName': 'Anna.png'},
      {'Name': 'Ben', 'FileName': 'Ben.png'},
      {'Name': 'Marie', 'FileName': 'Marie.png'},
      {'Name': 'Michael', 'FileName': 'Michael.png'}]
    Routine Characters
  LoopTerminator CharactersLoop
  LoopInitiator InstructionsLoop loopType="TrialHandler"
    conditionsFile = MASC_Instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'InstructionNumber': 2.0, 'Text': 'Le film met en scène ces quatre personnagesqui se rencontrent un samedi soir.', 'ClickContinue': ' Appuyez sur une touche pour continuer.'},
      {'InstructionNumber': 3.0, 'Text': 'La vidéo va être arrêtée à différents moments. Chaque arrêt sera accompagné d’une question. Vous devrez sélectionner une seule réponse parmi les quatre options présentées.  Il n’y a pas de bonne ou mauvaise réponse. Si vous n’êtes pas certain de la réponse, choisissez l’option qui vous apparaît la plus vraisemblable.', 'ClickContinue': ' Appuyez sur une touche pour continuer.'},
      {'InstructionNumber': 4.0, 'Text': 'Lorsque vous répondrez, essayez d’imaginer ce que le personnage en question pense ou ressent au moment où la vidéo a été arrêtée.', 'ClickContinue': ' Appuyez sur une touche pour continuer.'},
      {'InstructionNumber': 5.0, 'Text': "La vidéo est sur le point de commencer. Êtes-vous prêt? N’oubliez pas de regarder la vidéo avec beaucoup d’attention. Chaque séquence ne sera présentée qu’une seule fois. Dans la séquence suivante, l'expérience commencera.", 'ClickContinue': "Appuyez sur une touche pour commencer l'experience."}]
    Routine Instruction2
  LoopTerminator InstructionsLoop
  LoopInitiator VideoQuestionSliderLoop loopType="TrialHandler"
    conditionsFile = MASC_Cleaned_SingleRowPerQuestion_Corrected (1).xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'QuestionNum': 1.0, 'ClipNum': 1.0, 'ClipName': '01.mp4', 'QuestionType': 'Affective', 'Question': 'Qu‘est-ce que Anna ressent?', 'Target': 'Anna', 'pCorr': 0.8, 'ClipDur': 15.0, 'DurCat': 'Mid', 'Answer_1': 'Ses cheveux ne sont pas si beaux que ça', 'Target_1': 'Anna', 'Category_1': 'Absent TOM', 'Score_1': -2.0, 'Answer_2': 'Elle est heureuse du compliment', 'Target_2': 'Anna', 'Category_2': 'Hypomentalization', 'Score_2': -1.0, 'Answer_3': 'Michaël l’exaspère,\xa0 elle trouve qu’il en fait trop', 'Target_3': 'Anna', 'Category_3': 'Hypermentalization', 'Score_3': 1.0, 'Answer_4': 'Elle est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,
      {'QuestionNum': 2.0, 'ClipNum': 2.0, 'ClipName': '02.mp4', 'QuestionType': 'Cognitive', 'Question': 'Combien de personnes étaient dans la scène?', 'Target': 'Control', 'pCorr': 1.0, 'ClipDur': 26.0, 'DurCat': 'Long', 'Answer_1': 3.0, 'Target_1': 'Michael', 'Category_1': 'Control', 'Score_1': 1.0, 'Answer_2': 2.0, 'Target_2': 'Michael', 'Category_2': 'Control', 'Score_2': 0.0, 'Answer_3': 1.0, 'Target_3': 'Michael', 'Category_3': 'Control', 'Score_3': 1.0, 'Answer_4': 4.0, 'Target_4': 'Michael', 'Category_4': 'Control', 'Score_4': 1.0},
      {'QuestionNum': 3.0, 'ClipNum': 3.0, 'ClipName': '03.mp4', 'QuestionType': 'Cognitive', 'Question': 'Pourquoi est-ce que Anna dit cela?', 'Target': 'Anna', 'pCorr': 0.333333333, 'ClipDur': 71.0, 'DurCat': 'VeryLong', 'Answer_1': 'Elle veut que Marie divertisse Michaël', 'Target_1': 'Anna', 'Category_1': 'TOM', 'Score_1': 0.0, 'Answer_2': 'Elle veut faire en sorte que Michaël et Marie se fréquentent', 'Target_2': 'Anna', 'Category_2': 'Hypermentalization', 'Score_2': 1.0, 'Answer_3': 'Parce que Marie est sa meilleure amie', 'Target_3': 'Anna', 'Category_3': 'Absent TOM', 'Score_3': -2.0, 'Answe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,
      {'QuestionNum': 4.0, 'ClipNum': 4.0, 'ClipName': '04.mp4', 'QuestionType': 'Affective', 'Question': 'Qu‘est-ce que Marie ressent?', 'Target': 'Marie', 'pCorr': 0.066666667, 'ClipDur': 7.0, 'DurCat': 'Short', 'Answer_1': 'Elle n’a pas très envie de venir et a l’impression de se faire avoir par Anna', 'Target_1': 'Marie', 'Category_1': 'TOM', 'Score_1': 0.0, 'Answer_2': 'Le samedi est sa seule journée de congé', 'Target_2': 'Marie', 'Category_2': 'Absent TOM', 'Score_2': -2.0, 'Answer_3': 'Elle préfèrerait faire autre chose de son samedi soir', 'Target_3': 'Marie', 'Category_3': 'Hypomentalizati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
    Routine PlayVideo
    Routine AskQuestion
    Routine ConfidenceSlider
  LoopTerminator VideoQuestionSliderLoop
  Routine ThankYou
